PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = OpenSync-Demo
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Routines
  Routine initialization
    CodeComponent init
      Code Type = Py
      Before Experiment:
        import OpenSync
        import time
        print(OpenSync.OpenSync_path())

        mouse_object = OpenSync.i_o.Mouse("OpenSyncMouse", clickable_object=True, position=True, click_type=True)
        stimulus_object = OpenSync.markers.marker("StimMarker")



        EEG = OpenSync.sensors.EEG()
        EEG.OpenBCI_Cyton(daisy=True, port="COM3")

        # For eyetracking you need to do calibration which starts automatically,
        # Make sure Gazepoint Control is installed (https://www.gazept.com/downloads/)
        Eye_Tracking = OpenSync.sensors.EyeTracking()
        Eye_Tracking.Gazepoint(biometrics=True)

        OpenSync.record_data("OpenSyncTest.xdf") #record data will wait 3 seconds to detect all the streams
        time.sleep(5)
      End Experiment:
        OpenSync.stop_record()
  Routine stimulus
    TextComponent flankers
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $stim
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    MouseComponent Mouse
      clickable = right_arrow, left_arrow
      forceEndRoutineOnPress = valid click
      saveMouseState = every frame
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      timeRelativeTo = experiment
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    PolygonComponent right_arrow
      fillColor = white
      pos = (0.6, 0.4)
      shape = rectangle
      size = (0.2, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent left_arrow
      fillColor = white
      pos = (-0.6, 0.4)
      shape = rectangle
      size = (0.2, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent right_arrow_text
      color = black
      letterHeight = 0.1
      pos = (0.6, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = ->
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    TextComponent left_arrow_text
      color = black
      letterHeight = 0.1
      pos = (-0.6, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = <-
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    CodeComponent code
      Code Type = Py
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      Begin Routine:
        stimulus_object.stream_marker(condition)
        Mouse.setPos([0,-0.45])
      Each Frame:
        mouse_object.stream_pos(Mouse)
      End Routine:
        mouse_object.stream_clicktype(Mouse)
        mouse_object.stream_click(Mouse)
  Routine finish_experiment
    TextComponent finish_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = "End of Experiment"
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    CodeComponent code_2
      Code Type = Auto->JS
  Routine instructions
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Focus on the center arrow and using mouse, indicate the direction of the center arrow.
        This experiment includes only 4 trials. If you want to make it longer, click on "trials" loop and change nReps.
        To start, press "Space" bar.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixation
    TextComponent fix
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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Flow
  Routine initialization
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Stimulus\trials.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'condition': 'CR', 'stim': '>>>>>'},
      {'condition': 'CL', 'stim': '<<<<<'},
      {'condition': 'IR', 'stim': '<<><<'},
      {'condition': 'IL', 'stim': '>><>>'}]
    Routine fixation
    Routine stimulus
  LoopTerminator trials
  Routine finish_experiment
